<?xml version="1.0" encoding="ISO-8859-1"?>
<recipe>

<command_sequence>

  <!--blocking for IF-->
	<valve_protocol>MERFISH TCEP</valve_protocol>
	<valve_protocol>Protein Block</valve_protocol>
  <!--staining for IF-->
	<valve_protocol>Protein Primary</valve_protocol>
	<valve_protocol>Protein Wash</valve_protocol>
	<valve_protocol>Protein Secondary</valve_protocol>
  <valve_protocol>Protein Wash</valve_protocol>
  <valve_protocol>Flow STORM Buffer</valve_protocol>

  <!--imaging for protein-->
  <change_directory>D:\Pu\20210719-Thymus_Aire_Ck5_smIntron\H2P1_new</change_directory>
  <wakeup>5000</wakeup>
  <loop name = "Position Loop Zscan" increment = "name">
    <item name = "Conv_Zscan_750_647_488_s50_n250_5Hz"></item>
  </loop>
  <delay>5000</delay>
  <copy_directory>
    <source_path>D:\Pu\20210719-Thymus_Aire_Ck5_smIntron\H2P1_new</source_path>
    <target_path>\\10.245.74.158\Chromatin_NAS_5\20210719-Thymus_Aire_Ck5_smIntron\H2P1_new</target_path>
    <delete_source>True</delete_source>
  </copy_directory>
  <delay>5000</delay>

</command_sequence>




<item name = "Conv_Zscan_750_647_561_488_405_s13_n1000_5Hz">
  <movie>
    <name increment = "Yes">Conv_zscan</name>
        <overwrite>True</overwrite>
    <length>65</length>
    <parameters>Conv_Zscan_750_647_561_488_405_s13_n1000_5Hz</parameters>
    <delay>2000</delay>
    <check_focus>
        <num_focus_checks>30</num_focus_checks>
        <focus_scan/>
    </check_focus>
    <variable_entry name = "Position Loop Zscan"></variable_entry>
  </movie>
</item>

<item name = "Conv_Zscan_750_647_561_s13_n1000_5Hz">
  <movie>
    <name increment = "Yes">Conv_zscan</name>
        <overwrite>True</overwrite>
    <length>39</length>
    <parameters>Conv_Zscan_750_647_561_s13_n1000_5Hz</parameters>
    <delay>2000</delay>
    <check_focus>
        <num_focus_checks>30</num_focus_checks>
        <focus_scan/>
    </check_focus>
    <variable_entry name = "Position Loop Zscan"></variable_entry>
  </movie>
</item>


<item name = "Conv_Zscan_750_647_488_405_s50_n250_5Hz">
  <movie>
    <name increment = "Yes">Conv_zscan</name>
        <overwrite>True</overwrite>
    <length>200</length>
    <parameters>Conv_Zscan_750_647_488_405_s50_n250_5Hz</parameters>
    <delay>2000</delay>
    <check_focus>
        <num_focus_checks>30</num_focus_checks>
        <focus_scan/>
    </check_focus>
    <variable_entry name = "Position Loop Zscan"></variable_entry>
  </movie>
</item>

<item name = "Conv_Zscan_750_647_488_s50_n250_5Hz">
  <movie>
    <name increment = "Yes">Conv_zscan</name>
        <overwrite>True</overwrite>
    <length>150</length>
    <parameters>Conv_Zscan_750_647_488_s50_n250_5Hz</parameters>
    <delay>2000</delay>
    <check_focus>
        <num_focus_checks>30</num_focus_checks>
        <focus_scan/>
    </check_focus>
    <variable_entry name = "Position Loop Zscan"></variable_entry>
  </movie>
</item>


<item name = "Zscan_647_488_405_s60_n200">
  <movie>
    <name increment = "Yes">Conv_zscan</name>
        <overwrite>True</overwrite>
    <length>180</length>
    <parameters>Conv_Zscan_647_488_405_s60_n200_10Hz</parameters>
    <delay>2000</delay>
    <check_focus>
        <num_focus_checks>30</num_focus_checks>
        <focus_scan/>
    </check_focus>
    <variable_entry name = "Position Loop Zscan"></variable_entry>
  </movie>
</item>

<item name = "Zscan_647_488_s60_n200">
  <movie>
    <name increment = "Yes">Conv_zscan</name>
        <overwrite>True</overwrite>
    <length>120</length>
    <parameters>Conv_Zscan_647_488_s60_n200_10Hz</parameters>
    <delay>2000</delay>
    <check_focus>
        <num_focus_checks>30</num_focus_checks>
        <focus_scan/>
    </check_focus>
    <variable_entry name = "Position Loop Zscan"></variable_entry>
  </movie>
</item>

<item name = "Bleach_740_647_s5">
  <movie>
    <name increment = "Yes">bleach</name>
        <overwrite>True</overwrite>
    <length>5</length>
    <parameters>Bleach_740_647_s5</parameters>
    <check_focus>
        <num_focus_checks>30</num_focus_checks>
        <focus_scan/>
    </check_focus>
    <variable_entry name = "Position Loop Zscan"></variable_entry>
  </movie>
</item>

<item name = "Bleach_740_647_s30">
  <movie>
    <name increment = "Yes">bleach</name>
        <overwrite>True</overwrite>
    <length>30</length>
    <parameters>Bleach_740_647_s30</parameters>
    
    <check_focus>
        <num_focus_checks>30</num_focus_checks>
        <focus_scan/>
    </check_focus>
    <variable_entry name = "Position Loop Zscan"></variable_entry>
  </movie>
</item>


<loop_variable name = "Position Loop Zscan">
   <file_path>positions_all.txt</file_path>
</loop_variable>

</recipe>

