<?xml version="1.0" encoding="ISO-8859-1"?>
<recipe>

<command_sequence>

  <valve_protocol>Flow STORM Buffer</valve_protocol>
  <change_directory>D:\Pu\test_folder\H0R0</change_directory>
  <wakeup>5000</wakeup>
  <loop name = "Position Loop Zscan" increment = "name">
    <item name = "Zscan_750_647_488_405_s50_n200"></item>
  </loop>
  <delay>2000</delay>
  <copy_directory>
    <source_path>D:\Pu\test_folder\H0R0</source_path>
    <target_path>\\KOLMOGOROV\Chromatin_NAS_5\test_folder\H0R0</target_path>
    <delete_source>True</delete_source>
  </copy_directory>

  <valve_protocol>Hybridize 1</valve_protocol>
  <delay>600000</delay>
  <valve_protocol>Short Wash</valve_protocol>
  <valve_protocol>Flow Readouts</valve_protocol>
  <change_directory>D:\Pu\test_folder\H1R1</change_directory>
  <wakeup>5000</wakeup>
  <loop name = "Position Loop Zscan" increment = "name">
    <item name = "Zscan_750_647_488_s50_n200"></item>
  </loop>
  <delay>2000</delay>
  <copy_directory>
    <source_path>D:\Pu\test_folder\H1R1</source_path>
    <target_path>\\KOLMOGOROV\Chromatin_NAS_5\test_folder\H1R1</target_path>
    <delete_source>True</delete_source>
  </copy_directory>

</command_sequence>

<item name = "Bleach_740_647_s10">
  <movie>
    <name increment = "Yes">bleach</name>
        <overwrite>True</overwrite>
    <length>10</length>
    <parameters>bleach</parameters>
    <check_focus>
        <num_focus_checks>20</num_focus_checks>
        <focus_scan/>
    </check_focus>
    <variable_entry name = "Position Loop Zscan"></variable_entry>
  </movie>
</item>

<item name = "Zscan_750_647_488_405_s50_n200">
  <movie>
    <name increment = "Yes">Conv_zscan</name>
        <overwrite>True</overwrite>
    <length>200</length>
    <parameters>Conv_Zscan_750_647_488_405_s50_n200_10Hz</parameters>
    <check_focus>
        <num_focus_checks>20</num_focus_checks>
        <focus_scan/>
    </check_focus>
    <variable_entry name = "Position Loop Zscan"></variable_entry>
  </movie>
</item>

<item name = "Zscan_750_647_488_s50_n200">
  <movie>
    <name increment = "Yes">Conv_zscan</name>
        <overwrite>True</overwrite>
    <length>150</length>
    <parameters>Conv_Zscan_750_647_488_s50_n200_10Hz</parameters>
    <check_focus>
        <num_focus_checks>20</num_focus_checks>
        <focus_scan/>
    </check_focus>
    <variable_entry name = "Position Loop Zscan"></variable_entry>
  </movie>
</item>

<loop_variable name = "Position Loop Zscan">
   <file_path>positions.txt</file_path>
</loop_variable>

</recipe>

