<?xml version="1.0" encoding="ISO-8859-1"?>
<kilroy_configuration num_valves = "4" num_pumps = "1">
  <valve_commands>
    <valve_cmd name = "Set Hyb 1">
      <valve_pos valve_ID = "1" port_ID = "1"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 2">
      <valve_pos valve_ID = "1" port_ID = "2"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 3">
      <valve_pos valve_ID = "1" port_ID = "3"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 4">
      <valve_pos valve_ID = "1" port_ID = "4"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 5">
      <valve_pos valve_ID = "1" port_ID = "5"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 6">
      <valve_pos valve_ID = "1" port_ID = "6"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 7">
      <valve_pos valve_ID = "1" port_ID = "7"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 8">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "1"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 9">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "2"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 10">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "3"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 11">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "4"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 12">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "5"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 13">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "6"></valve_pos>
    </valve_cmd>    
    <valve_cmd name = "Set Hyb 14">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "7"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 15">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "1"></valve_pos>
    </valve_cmd>    
    <valve_cmd name = "Set Hyb 16">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "2"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 17">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "3"></valve_pos>
    </valve_cmd>   
    <valve_cmd name = "Set Hyb 18">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "4"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 19">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "5"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 20">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "6"></valve_pos>
    </valve_cmd>    
    <valve_cmd name = "Set Hyb 21">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "7"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 22">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "4" port_ID = "1"></valve_pos>
    </valve_cmd>   
    <valve_cmd name = "Set Hyb 23">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "4" port_ID = "2"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 24">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "4" port_ID = "3"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 25">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "4" port_ID = "4"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 26">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "4" port_ID = "5"></valve_pos>
    </valve_cmd>   
    <valve_cmd name = "Set Hyb 27">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "4" port_ID = "6"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 28">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "4" port_ID = "7"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 29">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "4" port_ID = "8"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Common Readouts">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "4" port_ID = "4"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set TCEP">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "4" port_ID = "5"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Imaging">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "4" port_ID = "6"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set 2xSSC">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "4" port_ID = "7"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Wash">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "3" port_ID = "8"></valve_pos>
      <valve_pos valve_ID = "4" port_ID = "8"></valve_pos>
    </valve_cmd>
  </valve_commands>
<!-- Volume: ml; Speed: ml/min; port_name should match PSD6 setting -->
  <pump_commands>
     <pump_cmd name = "Empty Syringe">
       <pump_config volume = "0" speed = "1.25" port_name = "Exhaust"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Take 0.1mL">
       <pump_config volume = "0.1" speed = "1.0" port_name = "Pull"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Take 0.2mL">
       <pump_config volume = "0.2" speed = "1.0" port_name = "Pull"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Take 0.5mL">
       <pump_config volume = "0.5" speed = "1.0" port_name = "Pull"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Take 1mL">
       <pump_config volume = "1.0" speed = "1.0" port_name = "Pull"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Take 1.3mL">
       <pump_config volume = "1.3" speed = "1.0" port_name = "Pull"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Bypass Take 0.2mL">
       <pump_config volume = "0.2" speed = "1.1" port_name = "Bypass"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Bypass Take 0.5mL">
       <pump_config volume = "0.5" speed = "1.1" port_name = "Bypass"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Bypass Take 1mL">
       <pump_config volume = "1.0" speed = "1.1" port_name = "Bypass"></pump_config>
     </pump_cmd>
  </pump_commands>

  <kilroy_protocols>
    <!-- 1.6 ml for common buffers -->
    <protocol name = "Incubate 5min">
      <valve duration = "300">Empty Syringe</valve>
    </protocol>
    <protocol name = "Incubate 10min">
      <valve duration = "600">Empty Syringe</valve>
    </protocol>
    <protocol name = "Incubate 15min">
      <valve duration = "900">Empty Syringe</valve>
    </protocol>

    <protocol name = "Flow Common Readouts">
      <valve duration = "3">Set Common Readouts</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "25">Take 0.2mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "25">Take 0.2mL</pump>
      <pump duration = "40">Empty Syringe</pump>       
    </protocol>
    <protocol name = "Flow Wash">
      <valve duration = "3">Set Wash</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "25">Take 0.2mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "25">Take 0.2mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow 2xSSC">
      <valve duration = "3">Set 2xSSC</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "25">Take 0.2mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "25">Take 0.2mL</pump>
      <pump duration = "40">Empty Syringe</pump>         
    </protocol>
    <protocol name = "Flow TCEP">
      <valve duration = "3">Set TCEP</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "275">Empty Syringe</pump>
      <pump duration = "25">Take 0.2mL</pump>
      <pump duration = "140">Empty Syringe</pump>
      <pump duration = "25">Take 0.2mL</pump>
      <pump duration = "140">Empty Syringe</pump>        
    </protocol>
    <protocol name = "Flow Imaging">
      <valve duration = "3">Set Imaging</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "25">Take 0.2mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "25">Take 0.2mL</pump>
      <pump duration = "120">Empty Syringe</pump>
    </protocol>

    <!-- 1.6 ml for unique hybridization -->
    <protocol name = "Flow Hyb 1">
      <valve duration = "3">Set Hyb 1</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 2">
      <valve duration = "3">Set Hyb 2</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 3">
      <valve duration = "3">Set Hyb 3</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 4">
      <valve duration = "3">Set Hyb 4</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 5">
      <valve duration = "3">Set Hyb 5</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 6">
      <valve duration = "3">Set Hyb 6</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 7">
      <valve duration = "3">Set Hyb 7</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 8">
      <valve duration = "3">Set Hyb 8</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 9">
      <valve duration = "3">Set Hyb 9</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 10">
      <valve duration = "3">Set Hyb 10</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 11">
      <valve duration = "3">Set Hyb 11</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump> 
    </protocol>
    <protocol name = "Flow Hyb 12">
      <valve duration = "3">Set Hyb 12</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 13">
      <valve duration = "3">Set Hyb 13</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 14">
      <valve duration = "3">Set Hyb 14</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 15">
      <valve duration = "3">Set Hyb 15</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 16">
      <valve duration = "3">Set Hyb 16</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 17">
      <valve duration = "3">Set Hyb 17</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 18">
      <valve duration = "3">Set Hyb 18</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 19">
      <valve duration = "3">Set Hyb 19</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 20">
      <valve duration = "3">Set Hyb 20</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 21">
      <valve duration = "3">Set Hyb 21</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 22">
      <valve duration = "3">Set Hyb 22</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 23">
      <valve duration = "3">Set Hyb 23</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 24">
      <valve duration = "3">Set Hyb 24</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 25">
      <valve duration = "3">Set Hyb 25</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 26">
      <valve duration = "3">Set Hyb 26</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 27">
      <valve duration = "3">Set Hyb 27</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 28">
      <valve duration = "3">Set Hyb 28</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 29">
      <valve duration = "3">Set Hyb 29</valve>
      <pump duration = "100">Take 1.3mL</pump>
      <pump duration = "90">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>
      <pump duration = "15">Take 0.1mL</pump>
      <pump duration = "40">Empty Syringe</pump>            
    </protocol>

    <!-- Cleanup -->
    <protocol name = "Cleanup all">
      <valve duration = "3">Set Hyb 1</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 2</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 3</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 4</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 5</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 6</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 7</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 8</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 9</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 10</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 11</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 12</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 13</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 14</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 15</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 16</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 17</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 18</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 19</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 20</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 21</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 22</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 23</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 24</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set 2xSSC</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Common Readouts</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set TCEP</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Wash</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Imaging</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
    </protocol>
  
    <protocol name = "Cleanup 1-24">
      <valve duration = "3">Set Hyb 1</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 2</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 3</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 4</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 5</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 6</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 7</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 8</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 9</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 10</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 11</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 12</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 13</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 14</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 15</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 16</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 17</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 18</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 19</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 20</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 21</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 22</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 23</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 24</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
    </protocol>

    <protocol name = "Cleanup common buffers">
      <valve duration = "3">Set 2xSSC</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Common Readouts</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set TCEP</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Wash</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
      <valve duration = "3">Set Imaging</valve>
      <pump duration = "60">Bypass Take 1mL</pump>
      <pump duration = "60">Empty Syringe</pump>
    </protocol>

    <protocol name = "Prime 1-24">
      <valve duration = "3">Set Hyb 1</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 2</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 3</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 4</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 5</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 6</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 7</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 8</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 9</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 10</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 11</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 12</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 13</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 14</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 15</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 16</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 17</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 18</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 19</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 20</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 21</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 22</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 23</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 24</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Wash</valve>
      <pump duration = "50">Bypass Take 0.5mL</pump>
      <pump duration = "50">Empty Syringe</pump>
    </protocol>  

    <protocol name = "Prime 1-16">
      <valve duration = "3">Set Hyb 1</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 2</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 3</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 4</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 5</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 6</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 7</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 8</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 9</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 10</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 11</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 12</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 13</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 14</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 15</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 16</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Wash</valve>
      <pump duration = "50">Bypass Take 0.5mL</pump>
      <pump duration = "50">Empty Syringe</pump>
    </protocol>  

    <protocol name = "Prime common buffers no TCEP">
      <valve duration = "3">Set Common Readouts</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Wash</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Imaging</valve>
      <pump duration = "20">Bypass Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set 2xSSC</valve>
      <pump duration = "50">Bypass Take 0.5mL</pump>
      <pump duration = "50">Empty Syringe</pump>
    </protocol>

  </kilroy_protocols>
</kilroy_configuration>
