<?xml version="1.0" encoding="ISO-8859-1"?>
<kilroy_configuration num_valves = "3" num_pumps = "1">
  <valve_commands>
    <valve_cmd name = "Set Hyb 1">
      <valve_pos valve_ID = "1" port_ID = "1"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 2">
      <valve_pos valve_ID = "1" port_ID = "2"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 3">
      <valve_pos valve_ID = "1" port_ID = "3"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 4">
      <valve_pos valve_ID = "1" port_ID = "4"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 5">
      <valve_pos valve_ID = "1" port_ID = "5"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 6">
      <valve_pos valve_ID = "1" port_ID = "6"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 7">
      <valve_pos valve_ID = "1" port_ID = "7"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 8">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 9">
      <valve_pos valve_ID = "1" port_ID = "9"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 10">
      <valve_pos valve_ID = "1" port_ID = "10"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 11">
      <valve_pos valve_ID = "1" port_ID = "11"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 12">
      <valve_pos valve_ID = "1" port_ID = "12"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 13">
      <valve_pos valve_ID = "1" port_ID = "13"></valve_pos>
    </valve_cmd>    
    <valve_cmd name = "Set Hyb 14">
      <valve_pos valve_ID = "1" port_ID = "14"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 15">
      <valve_pos valve_ID = "1" port_ID = "15"></valve_pos>
    </valve_cmd>    
    <valve_cmd name = "Set Hyb 16">
      <valve_pos valve_ID = "1" port_ID = "16"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 17">
      <valve_pos valve_ID = "1" port_ID = "17"></valve_pos>
    </valve_cmd>   
    <valve_cmd name = "Set Hyb 18">
      <valve_pos valve_ID = "1" port_ID = "18"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 19">
      <valve_pos valve_ID = "1" port_ID = "19"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 20">
      <valve_pos valve_ID = "1" port_ID = "20"></valve_pos>
    </valve_cmd>    
    <valve_cmd name = "Set Hyb 21">
      <valve_pos valve_ID = "1" port_ID = "21"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 22">
      <valve_pos valve_ID = "1" port_ID = "22"></valve_pos>
    </valve_cmd>   
    <valve_cmd name = "Set Hyb 23">
      <valve_pos valve_ID = "1" port_ID = "23"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 24">
      <valve_pos valve_ID = "1" port_ID = "24"></valve_pos>
    </valve_cmd>

    <valve_cmd name = "Set Hyb 25">
      <valve_pos valve_ID = "1" port_ID = "25"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 26">
      <valve_pos valve_ID = "1" port_ID = "26"></valve_pos>
    </valve_cmd>   
    <valve_cmd name = "Set Hyb 27">
      <valve_pos valve_ID = "1" port_ID = "27"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 28">
      <valve_pos valve_ID = "1" port_ID = "28"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 29">
      <valve_pos valve_ID = "1" port_ID = "29"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 30">
      <valve_pos valve_ID = "1" port_ID = "30"></valve_pos>
    </valve_cmd>   
    <valve_cmd name = "Set Hyb 31">
      <valve_pos valve_ID = "1" port_ID = "31"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 32">
      <valve_pos valve_ID = "1" port_ID = "32"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set 2xSSC">
      <valve_pos valve_ID = "1" port_ID = "25"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Common Readouts">
      <valve_pos valve_ID = "1" port_ID = "29"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set TCEP">
      <valve_pos valve_ID = "1" port_ID = "30"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Wash">
      <valve_pos valve_ID = "1" port_ID = "31"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Imaging">
      <valve_pos valve_ID = "1" port_ID = "32"></valve_pos>
    </valve_cmd>
  </valve_commands>
<!-- speed 33 ~= 1 mL / 60 sec -->
  <pump_commands>
     <pump_cmd name = "Push Syringe">
       <pump_config position = "0" speed = "33" direction = "Output"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Empty Syringe">
       <pump_config position = "0" speed = "33" direction = "Bypass"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Take 0.1mL">
       <pump_config position = "100" speed = "33" direction = "Input"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Take 0.2mL">
       <pump_config position = "200" speed = "33" direction = "Input"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Take 0.5mL">
       <pump_config position = "500" speed = "33" direction = "Input"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Take 1mL">
       <pump_config position = "1000" speed = "33" direction = "Input"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Take 1.6mL">
       <pump_config position = "1600" speed = "33" direction = "Input"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Fast Take 1mL">
       <pump_config position = "1000" speed = "100" direction = "Input"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Fast Push Syringe">
       <pump_config position = "0" speed = "100" direction = "Output"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Fast Empty Syringe">
       <pump_config position = "0" speed = "100" direction = "Bypass"></pump_config>
     </pump_cmd>
  </pump_commands>

  <kilroy_protocols>
    <!-- 1.6 ml for common buffers -->
    <protocol name = "Incubate 5min">
      <valve duration = "300">Push Syringe</valve>
    </protocol>
    <protocol name = "Incubate 10min">
      <valve duration = "600">Push Syringe</valve>
    </protocol>
    <protocol name = "Incubate 15min">
      <valve duration = "900">Push Syringe</valve>
    </protocol>

    <protocol name = "Flow Common Readouts">
      <valve duration = "3">Set Common Readouts</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Wash">
      <valve duration = "3">Set Wash</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow 2xSSC">
      <valve duration = "3">Set 2xSSC</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "230">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "140">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "140">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow TCEP">
      <valve duration = "3">Set TCEP</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Imaging">
      <valve duration = "3">Set Imaging</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "120">Push Syringe</pump>            
    </protocol>

    <!-- 1.6 ml for unique hybridization -->
    <protocol name = "Flow Hyb 1">
      <valve duration = "3">Set Hyb 1</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 2">
      <valve duration = "3">Set Hyb 2</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 3">
      <valve duration = "3">Set Hyb 3</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 4">
      <valve duration = "3">Set Hyb 4</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 5">
      <valve duration = "3">Set Hyb 5</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 6">
      <valve duration = "3">Set Hyb 6</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 7">
      <valve duration = "3">Set Hyb 7</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 8">
      <valve duration = "3">Set Hyb 8</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 9">
      <valve duration = "3">Set Hyb 9</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 10">
      <valve duration = "3">Set Hyb 10</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 11">
      <valve duration = "3">Set Hyb 11</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 12">
      <valve duration = "3">Set Hyb 12</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 13">
      <valve duration = "3">Set Hyb 13</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 14">
      <valve duration = "3">Set Hyb 14</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 15">
      <valve duration = "3">Set Hyb 15</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 16">
      <valve duration = "3">Set Hyb 16</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 17">
      <valve duration = "3">Set Hyb 17</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 18">
      <valve duration = "3">Set Hyb 18</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 19">
      <valve duration = "3">Set Hyb 19</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 20">
      <valve duration = "3">Set Hyb 20</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 21">
      <valve duration = "3">Set Hyb 21</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 22">
      <valve duration = "3">Set Hyb 22</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 23">
      <valve duration = "3">Set Hyb 23</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 24">
      <valve duration = "3">Set Hyb 24</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 25">
      <valve duration = "3">Set Hyb 25</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 26">
      <valve duration = "3">Set Hyb 26</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 27">
      <valve duration = "3">Set Hyb 27</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 28">
      <valve duration = "3">Set Hyb 28</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 29">
      <valve duration = "3">Set Hyb 29</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 30">
      <valve duration = "3">Set Hyb 30</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 31">
      <valve duration = "3">Set Hyb 31</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>
    <protocol name = "Flow Hyb 32">
      <valve duration = "3">Set Hyb 32</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <pump duration = "105">Take 1.6mL</pump>
      <pump duration = "130">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "40">Push Syringe</pump>            
    </protocol>

    <!-- Cleanup -->
    <protocol name = "Cleanup all">
      <valve duration = "3">Set Hyb 1</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 2</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 3</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 4</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 5</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 6</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 7</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 8</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 9</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 10</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 11</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 12</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 13</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 14</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 15</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 16</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 17</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 18</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 19</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 20</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 21</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 22</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 23</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 24</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 25</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 26</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 27</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set 2xSSC</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Common Readouts</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set TCEP</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Wash</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Imaging</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
    </protocol>
  
    <protocol name = "Cleanup 1-24">
      <valve duration = "3">Set Hyb 1</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 2</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 3</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 4</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 5</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 6</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 7</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 8</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 9</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 10</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 11</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 12</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 13</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 14</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 15</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 16</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 17</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 18</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 19</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 20</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 21</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 22</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 23</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 24</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
    </protocol>

    <protocol name = "Cleanup common buffers">
      <valve duration = "3">Set 2xSSC</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Common Readouts</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set TCEP</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Wash</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Imaging</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
    </protocol>

    <protocol name = "Cleanup 25-28">
      <valve duration = "3">Set Hyb 25</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 26</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 27</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
      <valve duration = "3">Set Hyb 28</valve>
      <pump duration = "30">Fast Take 1mL</pump>
      <pump duration = "30">Fast Push Syringe</pump>
    </protocol>


    <protocol name = "Short Prime 1-24">
      <valve duration = "3">Set Hyb 1</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 2</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 3</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 4</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 5</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 6</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 7</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 8</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 9</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 10</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 11</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 12</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 13</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 14</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 15</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 16</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 17</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 18</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 19</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 20</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 21</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 22</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 23</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 24</valve>
      <pump duration = "10">Take 0.1mL</pump>
      <pump duration = "10">Empty Syringe</pump>
      <valve duration = "3">Set Wash</valve>
      <pump duration = "50">Take 0.5mL</pump>
      <pump duration = "50">Empty Syringe</pump>
    </protocol>  

    <protocol name = "Prime 1-24">
      <valve duration = "3">Set Hyb 1</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 2</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 3</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 4</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 5</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 6</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 7</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 8</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 9</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 10</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 11</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 12</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 13</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 14</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 15</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 16</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 17</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 18</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 19</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 20</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 21</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 22</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 23</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Hyb 24</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Wash</valve>
      <pump duration = "50">Take 0.5mL</pump>
      <pump duration = "50">Empty Syringe</pump>
    </protocol>  

    <protocol name = "Prime common buffers">
      <valve duration = "3">Set Common Readouts</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set TCEP</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Wash</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set Imaging</valve>
      <pump duration = "20">Take 0.2mL</pump>
      <pump duration = "20">Empty Syringe</pump>
      <valve duration = "3">Set 2xSSC</valve>
      <pump duration = "50">Take 0.5mL</pump>
      <pump duration = "50">Empty Syringe</pump>
    </protocol>

  </kilroy_protocols>
</kilroy_configuration>
